PsychoPy2experiment version="2020.2.10"
Settings
  Audio latency priority = 4
  Experiment info = {'participant': 'ISO'}
  Full-screen window = True
  Monitor = ISO
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = shapes_part_1
  logging level = debug
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Routines
  Routine end
    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        phase = 'end'
        trial_number += 1

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)

        time_onset = timer_onsets_offsets.getTime()
        thisExp.addData('onset_seconds', time_onset)
      End Experiment:
        time = timer.getTime()
        thisExp.addData('end_time_seconds', time)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)

        time_offset = timer_onsets_offsets.getTime()
        thisExp.addData('offset_seconds', time_offset)

        time_duration = time_offset - time_onset
        thisExp.addData('duration_seconds', time_duration)
    TextComponent end_text_1
      color = black
      letterHeight = .045
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = You are done with this round of the shapes task. 
      units = height
      wrapWidth = 2000
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    TextComponent end_text_2
      color = black
      letterHeight = 0.04
      pos = (0, -.10)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 2000
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      text:
        1. Please stop the physiology recording.

        2. When you have exited this task, please start a timer for 10 minutes.

        3. Please go on to the next task.
    TextComponent end_text_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = [Press enter/return to exit]
      units = height
      wrapWidth = 2000
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    KeyboardComponent end_key_resp
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent end_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            USBTTL.write(C1.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine contingency
    CodeComponent contingency_code
      Code Type = Py
      Begin Routine:
        trial_number += 1
        phase = 'contingency'

        if random.random()>0.5:
            cs_plus_position_contingency = (-0.35, 0) # on the left
            cs_minus_position_contingency = (0.35,0) # on the right
            correct_answer = '1'
            cs_plus_side = 'left'
            cs_minus_side = 'right'
        else:
            cs_plus_position_contingency = (0.35, 0) # on the right
            cs_minus_position_contingency = (-0.35,0) # on the left
            correct_answer = '0'
            cs_plus_side = 'right'
            cs_minus_side = 'left'

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)

        time_onset = timer_onsets_offsets.getTime()
        thisExp.addData('onset_seconds', time_onset)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)
        thisExp.addData('cs_plus_side', cs_plus_side)
        thisExp.addData('cs_minus_side', cs_minus_side)

        time_offset = timer_onsets_offsets.getTime()
        thisExp.addData('offset_seconds', time_offset)

        time_duration = time_offset - time_onset
        thisExp.addData('duration_seconds', time_duration)
    KeyboardComponent contingency_key_resp
      allowedKeys = '1', '0'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent contingency_text_1
      color = black
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Which shape was followed by sound?
      units = height
      wrapWidth = 2000
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    TextComponent contingency_text_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = Press
      units = height
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    TextComponent contingency_text_3
      color = black
      letterHeight = 0.03
      pos = (-0.35, -0.25)
      startVal [time (s)] = 0.0
      text = 1
      units = height
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    TextComponent contingency_text_4
      color = black
      letterHeight = 0.03
      pos = (0.35, -0.25)
      startVal [time (s)] = 0.0
      text = 0
      units = height
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    ImageComponent contingency_image_cs_plus
      image [set every repeat] = $cs_plus_image
      opacity = 0.8
      pos [set every repeat] = $[cs_plus_position_contingency]
      size [set every repeat] = $[cs_plus_size]
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent contingency_iamge_cs_minus
      image [set every repeat] = $cs_minus_image
      opacity = 0.8
      pos [set every repeat] = $[cs_minus_position_contingency]
      size [set every repeat] = $[cs_minus_size]
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    CodeComponent contingency_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            USBTTL.write(C1.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine iti
    StaticComponent iti_trial
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    CodeComponent iti_code
      Code Type = Py
      Begin Routine:
        trial_number += 1
        phase = 'iti'

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)
    CodeComponent iti_ttl
      Code Type = Py
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      Begin Routine:
        if physio == '1':
            USBTTL.write(C6.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
    PolygonComponent iti_cross
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      units = height
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  Routine fixation
    StaticComponent iti_fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    CodeComponent fixation_code
      Code Type = Py
      Begin Routine:
        trial_number += 1
        phase = 'fixation'

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)

        time_onset = timer_onsets_offsets.getTime()
        thisExp.addData('onset_seconds', time_onset)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)

        time_offset = timer_onsets_offsets.getTime()
        thisExp.addData('offset_seconds', time_offset)

        time_duration = time_offset - time_onset
        thisExp.addData('duration_seconds', time_duration)
    CodeComponent fixation_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            USBTTL.write(C7.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine intro
    CodeComponent intro_code
      Code Type = Py
      Begin Experiment:
        # Hard code here for each participant
        session = '1' # ENTER 1-3
        order = '5' # ENTER 1-6
        counterbalance = 'B' # ENTER A OR B
        physio = '0' # ENTER 0 OR 1
        max_volume = 'X' # ENTER 50-80 (max tolerable for each participant)
        # End of hard code
        task_version = 1.1
        task_part = 1

        # Hide mouse
        win.mouseVisible = False

        # Setup orders and counterbalances
        if order == '1':
            shape_pair_1 = 'blue rectangle & yellow triangle'
            shape_pair_2 = 'green star & red oval'
            shape_pair_3 = 'purple hexagon & orange square'

        if order == '2':
            shape_pair_1 = 'blue rectangle & yellow triangle'
            shape_pair_2 = 'purple hexagon & orange square'
            shape_pair_3 = 'green star & red oval'

        if order == '3':
            shape_pair_1 = 'green star & red oval'
            shape_pair_2 = 'blue rectangle & yellow triangle'
            shape_pair_3 = 'purple hexagon & orange square'

        if order == '4':
            shape_pair_1 = 'green star & red oval'
            shape_pair_2 = 'purple hexagon & orange square'
            shape_pair_3 = 'blue rectangle & yellow triangle'

        if order == '5':
            shape_pair_1 = 'purple hexagon & orange square'
            shape_pair_2 = 'blue rectangle & yellow triangle'
            shape_pair_3 = 'green star & red oval'

        if order == '6':
            shape_pair_1 = 'purple hexagon & orange square'
            shape_pair_2 = 'green star & red oval'
            shape_pair_3 = 'blue rectangle & yellow triangle'

        if session == '1':
            shape_pair = shape_pair_1
        elif session == '2':
            shape_pair = shape_pair_2
        elif session == '3':
            shape_pair = shape_pair_3

        if shape_pair == 'blue rectangle & yellow triangle':
            if counterbalance == 'A':
                cs_plus_shape = 'blue_rectangle'
                cs_plus_image = 'stimuli/blue_rectangle.png'
                cs_plus_size = (0.4,0.3)
                cs_plus_position = (0,0)
                cs_minus_shape = 'yellow_triangle'
                cs_minus_image = 'stimuli/yellow_triangle.png'
                cs_minus_size = (0.3,0.3)
                cs_minus_position = (0,0.03)
            elif counterbalance == 'B':
                cs_plus_shape = 'yellow_triangle'
                cs_plus_image = 'stimuli/yellow_triangle.png'
                cs_plus_size = (0.3,0.3)
                cs_plus_position = (0,0.03)
                cs_minus_shape = 'blue_rectangle'
                cs_minus_image = 'stimuli/blue_rectangle.png'
                cs_minus_size = (0.4,0.3)
                cs_minus_position = (0,0)

        if shape_pair == 'green star & red oval':
            if counterbalance == 'A':
                cs_plus_shape = 'green_star'
                cs_plus_image = 'stimuli/green_star.png'
                cs_plus_size = (0.3,0.3)
                cs_plus_position = (0,0)
                cs_minus_shape = 'red_oval'
                cs_minus_image = 'stimuli/red_oval.png'
                cs_minus_size = (0.3,0.4)
                cs_minus_position = (0,0)
            elif counterbalance == 'B':
                cs_plus_shape = 'red_oval'
                cs_plus_image = 'stimuli/red_oval.png'
                cs_plus_size = (0.3,0.4)
                cs_plus_position = (0,0)
                cs_minus_shape = 'green_star'
                cs_minus_image = 'stimuli/green_star.png'
                cs_minus_size = (0.3,0.3)
                cs_minus_position = (0,0)

        if shape_pair == 'purple hexagon & orange square':
            if counterbalance == 'A':
                cs_plus_shape = 'purple_hexagon'
                cs_plus_image = 'stimuli/purple_hexagon.png'
                cs_plus_size = (0.3,0.3)
                cs_plus_position = (0,0)
                cs_minus_shape = 'orange_square'
                cs_minus_image = 'stimuli/orange_square.png'
                cs_minus_size = (0.3,0.3)
                cs_minus_position = (0,0)
            elif counterbalance == 'B':
                cs_plus_shape = 'purple_hexagon'
                cs_plus_image = 'stimuli/purple_hexagon.png'
                cs_plus_size = (0.3,0.3)
                cs_plus_position = (0,0)
                cs_minus_shape = 'orange_square'
                cs_minus_image = 'stimuli/orange_square.png'
                cs_minus_size = (0.3,0.3)
                cs_minus_position = (0,0)

        # Setup conditions list for this run
        import random
        conditions_list = ["cs_plus", "cs_plus_no_sound", "cs_minus"]
        conditions_first_loop = [["cs_plus", "cs_plus_no_sound", "cs_minus"], ["cs_plus", "cs_minus", "cs_plus_no_sound"], ["cs_minus", "cs_plus", "cs_plus_no_sound"]]
        conditions_last_loop = [["cs_minus", "cs_plus_no_sound", "cs_plus"], ["cs_plus_no_sound", "cs_plus", "cs_minus"], ["cs_plus_no_sound", "cs_minus", "cs_plus"]]
        first_loop_choice = random.randint(0, 2)
        first_loop_now = conditions_first_loop[first_loop_choice]
        last_loop_choice = random.randint(0, 2)
        last_loop_now = conditions_last_loop[last_loop_choice]
        conditions_list_now = first_loop_now

        for x in range(1,7):
            random.shuffle(conditions_list)
            conditions_list_now.extend(conditions_list)

        conditions_list_now = conditions_list_now + last_loop_now
      Begin Routine:
        trial_number += 1
        phase = 'instructions_1'

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)

        # Setup onsets timer
        timer_onsets_offsets = core.Clock()
        time_onset = timer_onsets_offsets.getTime()
        thisExp.addData('onset_seconds', time_onset)
      End Routine:
        thisExp.addData('phase', phase)
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('shape_pair', shape_pair)
        thisExp.addData('cs_plus_shape', cs_plus_shape)
        thisExp.addData('cs_minus_shape', cs_minus_shape)
        thisExp.addData('task_info_order', order)
        thisExp.addData('task_info_session', session)
        thisExp.addData('task_info_counterbalance', counterbalance)
        thisExp.addData('task_info_physio', physio)
        thisExp.addData('task_info_max_volume', max_volume)
        thisExp.addData('task_info_conditions_list', conditions_list_now)
        thisExp.addData('task_version', task_version)
        thisExp.addData('task_part', task_part)

        time_offset = timer_onsets_offsets.getTime()
        thisExp.addData('offset_seconds', time_offset)

        time_duration = time_offset - time_onset
        thisExp.addData('duration_seconds', time_duration)
    TextComponent intro_text_1
      color = black
      letterHeight = 0.05
      pos = [0,0.35]
      startVal [time (s)] = 0.0
      text = Thank you!
      units = height
      wrapWidth = 2000
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    TextComponent intro_text_2
      color = black
      letterHeight = 0.05
      pos = [0,0.05]
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.9
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      text:
        This task may seem quite slow,
        this is because we are measuring your skin conductance.

        Please be patient, pay attention, and keep as still as possible so that we can get an accurate physiology reading.
    TextComponent intro_text_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = First we will ask you a few questions.
      units = height
      wrapWidth = 2000
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    TextComponent intro_text_4
      color = black
      letterHeight = 0.03
      pos = (0, -0.33)
      startVal [time (s)] = 0.0
      text = [Press enter/return to begin]
      units = height
      wrapWidth = 2000
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    KeyboardComponent intro_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent intro_ttl
      Code Type = Py
      Begin Experiment:
        if physio == '1':
            import serial
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            Reset = 'RR'
            Zero = '00'
            C1 = '01'
            C2 = '02'
            C3 = '04'
            C4 = '08'
            C5 = '10'
            C6 = '20'
            C7 = '40'
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
      Begin Routine:
        if physio == '1':
            USBTTL.write(C1.encode())
      End Experiment:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine intro_2
    CodeComponent intro_2_code
      Code Type = Py
      Begin Routine:
        trial_number += 1
        phase = 'instructions_2'

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)

        time_onset = timer_onsets_offsets.getTime()
        thisExp.addData('onset_seconds', time_onset)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)

        time_offset = timer_onsets_offsets.getTime()
        thisExp.addData('offset_seconds', time_offset)

        time_duration = time_offset - time_onset
        thisExp.addData('duration_seconds', time_duration)
    TextComponent intro_2_text
      color = black
      letterHeight = 0.04
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      text = In this task, you will see different coloured shapes. 
      units = height
      wrapWidth = 2000
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    TextComponent intro_2_text_1
      color = black
      letterHeight = 0.04
      pos = [0, 0.25]
      startVal [time (s)] = 0.0
      text = After some time, a grey dot will appear in the centre of the shape. 
      units = height
      wrapWidth = 2000
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    TextComponent intro_2_text_2
      color = black
      letterHeight = 0.04
      pos = [0, 0.15]
      startVal [time (s)] = 0.0
      text = When you see this grey dot,
      units = height
      wrapWidth = 2000
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    TextComponent intro_2_text_3
      color = black
      letterHeight = 0.04
      pos = [0, 0.10]
      startVal [time (s)] = 0.0
      text = press the spacebar as quickly as possible.
      units = height
      wrapWidth = 2000
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    TextComponent intro_2_text_4
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = We are measuring your reaction time.
      units = height
      wrapWidth = 2000
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    TextComponent intro_2_text_5
      color = black
      letterHeight = 0.04
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = WE WANT TO SEE HOW FAST YOU CAN RESPOND!
      units = height
      wrapWidth = 2000
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    TextComponent intro_2_text_6
      color = black
      letterHeight = 0.04
      pos = [0, -0.15]
      startVal [time (s)] = 0.0
      text = Some of these shapes may or may not be followed by a sound. 
      units = height
      wrapWidth = 2000
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    TextComponent intro_2_text_7
      color = black
      letterHeight = 0.04
      pos = [0, -0.20]
      startVal [time (s)] = 0.0
      text = Your button press does not affect whether or not you hear the sound.
      units = height
      wrapWidth = 2000
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    TextComponent intro_2_text_8
      color = black
      letterHeight = 0.03
      pos = [0, -0.30]
      startVal [time (s)] = 0.0
      text = [Press enter/return to begin]
      units = height
      wrapWidth = 2000
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    KeyboardComponent intro_2_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent intro_2_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            USBTTL.write(C1.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine us
    CodeComponent us_code
      Code Type = Py
      Begin Routine:
        trial_number += 1

        if cs == 'cs_plus':
            image = cs_plus_image
            size = cs_plus_size
            position = cs_plus_position
            trial_volume = 1
        if cs == 'cs_plus_no_sound':
            image = cs_plus_image
            size = cs_plus_size
            position = cs_plus_position
            trial_volume = 0
        elif cs == 'cs_minus':
            image = cs_minus_image
            size = cs_minus_size
            position = cs_minus_position
            trial_volume = 0
        else:
            print('us error')

        trial_number += 1

        if currentLoop.name == 'acquisition':
            phase = 'acquisition'
        elif currentLoop.name == 'recall':
            phase = 'recall'
        elif currentLoop.name == 'extinction':
            phase = 'extinction'
        else:
            print('phase error')

        if cs == 'cs_plus':
            condition = 'cs_plus'
        elif cs == 'cs_plus_no_sound':
            condition = 'cs_plus_no_sound'
        elif cs == 'cs_minus':
            condition = 'cs_minus'
        else:
            print('condition error')

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)
        thisExp.addData('condition', condition)
        thisExp.addData('cs', cs)
        thisExp.addData('trial_volume', trial_volume)
    CodeComponent us_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            if cs == 'cs_plus':
                USBTTL.write(C5.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
    SoundComponent us_screech
      sound = sound.ogg
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      volume [set every repeat] = $trial_volume
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    ImageComponent us_image
      image [set every repeat] = $image
      opacity = 0.8
      pos [set every repeat] = $position
      size [set every repeat] = $size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
      units = height
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    KeyboardComponent us_key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      store = first key
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    PolygonComponent us_dot
      fillColor = grey
      lineColor = grey
      lineWidth = 5
      nVertices = 100
      shape = regular polygon...
      size = (0.03,0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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  Routine cs
    CodeComponent cs_code
      Code Type = Py
      Begin Routine:
        trial_number += 1

        if currentLoop.name == 'acquisition':
            cs = conditions_list_now.pop(0)
        elif currentLoop.name == 'recall':
            cs = eval('cs')
        elif currentLoop.name == 'extinction':
            cs = eval('cs')
        else:
            print('cs error')

        if cs == 'cs_plus':
            image = cs_plus_image
            size = cs_plus_size
            position = cs_plus_position
        elif cs == 'cs_plus_no_sound':
            image = cs_plus_image
            size = cs_plus_size
            position = cs_plus_position
        elif cs == 'cs_minus':
            image = cs_minus_image
            size = cs_minus_size
            position = cs_minus_position
        else:
            print('cs error')

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)

        time_onset = timer_onsets_offsets.getTime()
        thisExp.addData('onset_seconds', time_onset)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('cs', cs)

        time_offset = timer_onsets_offsets.getTime()
        thisExp.addData('offset_seconds', time_offset)

        time_duration = time_offset - time_onset
        thisExp.addData('duration_seconds', time_duration)
    CodeComponent cs_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            if currentLoop.name == 'acquisition':
                if cs == 'cs_plus':
                    USBTTL.write(C2.encode())
                elif cs == 'cs_plus_no_sound':
                    USBTTL.write(C3.encode())
                elif cs == 'cs_minus':
                    USBTTL.write(C4.encode())
                else:
                    print('channel error')
            elif currentLoop.name == 'recall':
                if cs == 'cs_plus':
                    USBTTL.write(C2.encode())
                elif cs == 'cs_plus_no_sound':
                    USBTTL.write(C3.encode())
                elif cs == 'cs_minus':
                    USBTTL.write(C4.encode())
                else:
                    print('channel error')
            elif currentLoop.name == 'extinction':
                if cs == 'cs_plus':
                    USBTTL.write(C2.encode())
                elif cs == 'cs_plus_no_sound':
                    USBTTL.write(C3.encode())
                elif cs == 'cs_minus':
                    USBTTL.write(C4.encode())
                else:
                    print('channel error')
            else:
                print('no physio')
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
    ImageComponent cs_image
      image [set every repeat] = $image
      opacity = 0.8
      pos [set every repeat] = $position
      size [set every repeat] = $size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
      units = height
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  Routine cs_preacquisition
    CodeComponent cs_preacquisition_counterbalance
      Code Type = Py
      Begin Routine:
        if eval('cs') == 'cs_plus':
            image = cs_plus_image
            size = cs_plus_size
        elif eval('cs') == 'cs_plus_no_sound':
            image = cs_plus_image
            size = cs_plus_size
        elif eval('cs') == 'cs_minus':
            image = cs_minus_image
            size = cs_minus_size
        else:
            print('cs error')
    CodeComponent cs_preacquisition_ttl
      Code Type = Py
      Begin Routine:
        if expInfo['physio'] == '1':
            import serial
            USBTTL = serial.Serial('/dev/tty.usbserial-BBTKUSBTTL',115200,timeout = 1) #finding the USB TTL
            Reset = "RR" #resets all the channels to zero
            USBTTL.write(Reset.encode())
            if eval('cs') == "cs_plus":
                C1 = "01" #in digital channel 1, output a marker
                USBTTL.write(C1.encode())
            elif eval('cs') == "cs_plus_no_sound":
                C2 = "02" #in digital channel 2, output a marker
                USBTTL.write(C2.encode())
            elif eval('cs') == "cs_minus":
                C3 = "04" #in digital channel 3, output a marker
                USBTTL.write(C3.encode())
      End Routine:
        if expInfo['physio'] == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
    KeyboardComponent cs_preacquisition_key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      store = first key
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    ImageComponent cs_preacquisition_image
      image [set every repeat] = $image
      size [set every repeat] = $size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      texture resolution = 512
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    CodeComponent cs_preacquisition_code
      Code Type = Py
      Begin Routine:
        trial_number += 1
        phase = 'preacquisition'
        if eval('cs') == 'cs_plus':
            condition = 'cs_plus_no_sound'
        elif eval('cs') == 'cs_minus':
            condition = 'cs_minus'
        else:
            print('condition error')
        click_time = 2
        click_volume = 0
        flag = 0 # has the sound on click happened yet - only first time
        trial_clock = core.Clock()
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)
        thisExp.addData('condition', condition)
      Each Frame:
        if cs_preacquisition_key_resp.keys and flag == 0:
            click_time = trial_clock.getTime()
            click_volume = 0.5
            flag = 1
    SoundComponent cs_preacquisition_click
      sound = click.ogg
      startVal [time (s)] = $click_time
      stopVal [duration (s)] = 0.25
      volume [set every frame] = $click_volume
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  Routine valence_us
    CodeComponent valence_us_code
      Code Type = Py
      Begin Routine:
        trial_number += 1

        if currentLoop.name == 'valence_us_postextinction':
            phase = 'rating_us_valence'
        else:
            print('phase error')
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)
    TextComponent valence_us_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How unpleasant/pleasant do you find this sound?
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_press
      color = black
      letterHeight = 0.025
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = (Use the numbers on the keyboard to respond)
      units = height
      wrapWidth = 2000
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    KeyboardComponent valence_us_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent valence_us_image
      image = stimuli/sound.png
      pos = (0, 0.11)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    SoundComponent valence_us_sound
      sound = screech.ogg
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent valence_us_sam_1
      image = stimuli/valence_1.png
      pos = (-0.5,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_us_sam_2
      image = stimuli/valence_2.png
      pos = (-0.25,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_us_sam_3
      image = stimuli/valence_3.png
      pos = (0,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_us_sam_4
      image = stimuli/valence_4.png
      pos = (0.25,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_us_sam_5
      image = stimuli/valence_5.png
      pos = (0.5,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    PolygonComponent valence_us_rating_line
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      pos = [0,-0.32]
      shape = line
      size = (1, 0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.5,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.375,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.25,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_4
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.125,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_6
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.125,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_7
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.25,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_8
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.375,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_us_rating_tick_9
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.5,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent valence_us_text_1
      color = black
      letterHeight = 0.03
      pos = [-0.5,-0.37]
      startVal [time (s)] = 0.0
      text = 1
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_2
      color = black
      letterHeight = 0.03
      pos = [-0.375,-0.37]
      startVal [time (s)] = 0.0
      text = 2
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_3
      color = black
      letterHeight = 0.03
      pos = [-0.25,-0.37]
      startVal [time (s)] = 0.0
      text = 3
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_4
      color = black
      letterHeight = 0.03
      pos = [-0.125,-0.37]
      startVal [time (s)] = 0.0
      text = 4
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_5
      color = black
      letterHeight = 0.03
      pos = [0,-0.37]
      startVal [time (s)] = 0.0
      text = 5
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_6
      color = black
      letterHeight = 0.03
      pos = [0.125,-0.37]
      startVal [time (s)] = 0.0
      text = 6
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_7
      color = black
      letterHeight = 0.03
      pos = [0.25,-0.37]
      startVal [time (s)] = 0.0
      text = 7
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_8
      color = black
      letterHeight = 0.03
      pos = [0.375,-0.37]
      startVal [time (s)] = 0.0
      text = 8
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_9
      color = black
      letterHeight = 0.03
      pos = [0.5,-0.37]
      startVal [time (s)] = 0.0
      text = 9
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_very_unpleasant
      color = black
      letterHeight = 0.03
      pos = [-0.5,-0.42]
      startVal [time (s)] = 0.0
      text = Very unpleasant
      units = height
      wrapWidth = 2000
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    TextComponent valence_us_text_very_pleasant
      color = black
      letterHeight = 0.03
      pos = [0.5,-0.42]
      startVal [time (s)] = 0.0
      text = Very pleasant
      units = height
      wrapWidth = 2000
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    CodeComponent valence_us_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            USBTTL.write(C1.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine arousal_us
    CodeComponent arousal_us_code
      Code Type = Py
      Begin Routine:
        trial_number += 1

        if currentLoop.name == 'arousal_us_postextinction':
            phase = 'rating_us_arousal'
        else:
            print('phase error')
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)
    TextComponent arousal_us_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How anxious does this sound make you feel?
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_press
      color = black
      letterHeight = 0.025
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = (Use the numbers on the keyboard to respond)
      units = height
      wrapWidth = 2000
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    KeyboardComponent arousal_us_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent arousal_us_image
      image = stimuli/sound.png
      pos = (0, 0.11)
      size = (0.3,0.3)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    SoundComponent arousal_us_sound
      sound = screech.ogg
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    ImageComponent arousal_us_sam_1
      image = stimuli/arousal_1.png
      pos = (-0.5,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_us_sam_2
      image = stimuli/arousal_2.png
      pos = (-0.25,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_us_sam_3
      image = stimuli/arousal_3.png
      pos = (0,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_us_sam_4
      image = stimuli/arousal_4.png
      pos = (0.25,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_us_sam_5
      image = stimuli/arousal_5.png
      pos = (0.5,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    PolygonComponent arousal_us_rating_line
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      pos = [0,-0.32]
      shape = line
      size = (1, 10)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.5,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.375,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.25,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_4
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.125,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_6
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.125,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_7
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.25,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_8
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.375,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_us_rating_tick_9
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.5,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent arousal_us_text_1
      color = black
      letterHeight = 0.03
      pos = [-0.5,-0.37]
      startVal [time (s)] = 0.0
      text = 1
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_2
      color = black
      letterHeight = 0.03
      pos = [-0.375,-0.37]
      startVal [time (s)] = 0.0
      text = 2
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_3
      color = black
      letterHeight = 0.03
      pos = [-0.25,-0.37]
      startVal [time (s)] = 0.0
      text = 3
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_4
      color = black
      letterHeight = 0.03
      pos = [-0.125,-0.37]
      startVal [time (s)] = 0.0
      text = 4
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_5
      color = black
      letterHeight = 0.03
      pos = [0,-0.37]
      startVal [time (s)] = 0.0
      text = 5
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_6
      color = black
      letterHeight = 0.03
      pos = [0.125,-0.37]
      startVal [time (s)] = 0.0
      text = 6
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_7
      color = black
      letterHeight = 0.03
      pos = [0.25,-0.37]
      startVal [time (s)] = 0.0
      text = 7
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_8
      color = black
      letterHeight = 0.03
      pos = [0.375,-0.37]
      startVal [time (s)] = 0.0
      text = 8
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_9
      color = black
      letterHeight = 0.03
      pos = [0.5,-0.37]
      startVal [time (s)] = 0.0
      text = 9
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_not_anxious
      color = black
      letterHeight = 0.03
      pos = [-0.5,-0.42]
      startVal [time (s)] = 0.0
      text = Not anxious
      units = height
      wrapWidth = 2000
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    TextComponent arousal_us_text_very_anxious
      color = black
      letterHeight = 0.03
      pos = [0.5,-0.42]
      startVal [time (s)] = 0.0
      text = Very anxious
      units = height
      wrapWidth = 2000
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    CodeComponent arousal_us_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            USBTTL.write(C1.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine valence_cs
    CodeComponent valence_cs_code
      Code Type = Py
      Begin Routine:
        trial_number += 1

        if eval('cs') == 'cs_plus':
            image = cs_plus_image
            size = cs_plus_size
        elif eval('cs') == 'cs_plus_no_sound':
            image = cs_plus_image
            size = cs_plus_size
        elif eval('cs') == 'cs_minus':
            image = cs_minus_image
            size = cs_minus_size
        else:
            print('cs error')

        if currentLoop.name == 'valence_cs_preacquisition':
            phase = 'rating_cs_preacquisition_valence'
        elif currentLoop.name == 'valence_cs_postacquisition':
            phase = 'rating_cs_postacquisition_valence'
        elif currentLoop.name == 'valence_cs_postextinction':
            phase = 'rating_cs_postextinction_valence'
        else:
            print('phase error')

        time = timer.getTime()
        thisExp.addData('timer_seconds', time)

        time_onset = timer_onsets_offsets.getTime()
        thisExp.addData('onset_seconds', time_onset)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)

        time_offset = timer_onsets_offsets.getTime()
        thisExp.addData('offset_seconds', time_offset)

        time_duration = time_offset - time_onset
        thisExp.addData('duration_seconds', time_duration)
    TextComponent valence_cs_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How unpleasant/pleasant do you find this shape?
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_press
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = (Use the numbers on the keyboard to respond)
      units = height
      wrapWidth = 2000
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    KeyboardComponent valence_cs_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent valence_cs_image
      image [set every repeat] = $image
      opacity = 0.8
      pos = (0, 0.11)
      size [set every repeat] = $size
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_cs_sam_1
      image = stimuli/valence_1.png
      pos = (-0.5,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_cs_sam_2
      image = stimuli/valence_2.png
      pos = (-0.25,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_cs_sam_3
      image = stimuli/valence_3.png
      pos = (0,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_cs_sam_4
      image = stimuli/valence_4.png
      pos = (0.25,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent valence_cs_sam_5
      image = stimuli/valence_5.png
      pos = (0.5,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    PolygonComponent valence_cs_rating_line
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      pos = [0,-0.32]
      shape = line
      size = (1, 0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.5,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.375,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.25,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_4
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.125,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_6
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.125,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_7
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.25,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_8
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.375,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent valence_cs_rating_tick_9
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.5,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent valence_cs_text_1
      color = black
      letterHeight = 0.03
      pos = [-0.5,-0.37]
      startVal [time (s)] = 0.0
      text = 1
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_2
      color = black
      letterHeight = 0.03
      pos = [-0.375,-0.37]
      startVal [time (s)] = 0.0
      text = 2
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_3
      color = black
      letterHeight = 0.03
      pos = [-0.25,-0.37]
      startVal [time (s)] = 0.0
      text = 3
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_4
      color = black
      letterHeight = 0.03
      pos = [-0.125,-0.37]
      startVal [time (s)] = 0.0
      text = 4
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_5
      color = black
      letterHeight = 0.03
      pos = [0,-0.37]
      startVal [time (s)] = 0.0
      text = 5
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_6
      color = black
      letterHeight = 0.03
      pos = [0.125,-0.37]
      startVal [time (s)] = 0.0
      text = 6
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_7
      color = black
      letterHeight = 0.03
      pos = [0.25,-0.37]
      startVal [time (s)] = 0.0
      text = 7
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_8
      color = black
      letterHeight = 0.03
      pos = [0.375,-0.37]
      startVal [time (s)] = 0.0
      text = 8
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_9
      color = black
      letterHeight = 0.03
      pos = [0.5,-0.37]
      startVal [time (s)] = 0.0
      text = 9
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_very_unpleasant
      color = black
      letterHeight = 0.03
      pos = [0.5,-0.42]
      startVal [time (s)] = 0.0
      text = Very unpleasant
      units = height
      wrapWidth = 2000
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    TextComponent valence_cs_text_very_pleasant
      color = black
      letterHeight = 0.03
      pos = [-0.5,-0.42]
      startVal [time (s)] = 0.0
      text = Very pleasant
      units = height
      wrapWidth = 2000
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    CodeComponent valence_cs_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            USBTTL.write(C1.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine arousal_cs
    CodeComponent arousal_cs_code
      Code Type = Py
      Begin Routine:
        trial_number += 1

        if eval('cs') == 'cs_plus':
            image = cs_plus_image
            size = cs_plus_size
        elif eval('cs') == 'cs_plus_no_sound':
            image = cs_plus_image
            size = cs_plus_size
        elif eval('cs') == 'cs_minus':
            image = cs_minus_image
            size = cs_minus_size
        else:
            print('cs error')


        if currentLoop.name == 'arousal_cs_preacquisition':
            phase = 'rating_cs_preacquisition_arousal'
        elif currentLoop.name == 'arousal_cs_postacquisition':
            phase = 'rating_cs_postacquisition_arousal'
        elif currentLoop.name == 'arousal_cs_postextinction':
            phase = 'rating_cs_postextinction_arousal'
        else:
            print('phase error')

        thisExp.addData('timer_seconds', time)

        time_onset = timer_onsets_offsets.getTime()
        thisExp.addData('onset_seconds', time_onset)
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('phase', phase)

        time_offset = timer_onsets_offsets.getTime()
        thisExp.addData('offset_seconds', time_offset)

        time_duration = time_offset - time_onset
        thisExp.addData('duration_seconds', time_duration)
    TextComponent arousal_cs_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How anxious does this shape make you feel?
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_press
      color = black
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = (Use the numbers on the keyboard to respond)
      units = height
      wrapWidth = 2000
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    KeyboardComponent arousal_cs_key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent arousal_cs_image
      image [set every repeat] = $image
      opacity = 0.8
      pos = (0, 0.11)
      size [set every repeat] = $size
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_cs_sam_1
      image = stimuli/arousal_1.png
      pos = (-0.5,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_cs_sam_2
      image = stimuli/arousal_2.png
      pos = (-0.25,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_cs_sam_3
      image = stimuli/arousal_3.png
      pos = (0,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_cs_sam_4
      image = stimuli/arousal_4.png
      pos = (0.25,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent arousal_cs_sam_5
      image = stimuli/arousal_5.png
      pos = (0.5,-0.19)
      size = (0.16,0.16)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    PolygonComponent arousal_cs_rating_line
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      pos = [0,-0.32]
      shape = line
      size = (1, 0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.5,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.375,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.25,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_4
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [-0.125,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_6
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.125,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_7
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.25,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_8
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.375,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent arousal_cs_rating_tick_9
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = [0.5,-0.32]
      shape = line
      size = (0.05,0)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent arousal_cs_text_1
      color = black
      letterHeight = 0.03
      pos = [-0.5,-0.37]
      startVal [time (s)] = 0.0
      text = 1
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_2
      color = black
      letterHeight = 0.03
      pos = [-0.375,-0.37]
      startVal [time (s)] = 0.0
      text = 2
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_3
      color = black
      letterHeight = 0.03
      pos = [-0.25,-0.37]
      startVal [time (s)] = 0.0
      text = 3
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_4
      color = black
      letterHeight = 0.03
      pos = [-0.125,-0.37]
      startVal [time (s)] = 0.0
      text = 4
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_5
      color = black
      letterHeight = 0.03
      pos = [0,-0.37]
      startVal [time (s)] = 0.0
      text = 5
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_6
      color = black
      letterHeight = 0.03
      pos = [0.125,-0.37]
      startVal [time (s)] = 0.0
      text = 6
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_7
      color = black
      letterHeight = 0.03
      pos = [0.25,-0.37]
      startVal [time (s)] = 0.0
      text = 7
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_8
      color = black
      letterHeight = 0.03
      pos = [0.375,-0.37]
      startVal [time (s)] = 0.0
      text = 8
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_9
      color = black
      letterHeight = 0.03
      pos = [0.5,-0.37]
      startVal [time (s)] = 0.0
      text = 9
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_not_anxious
      color = black
      letterHeight = 0.03
      pos = [-0.5,-0.42]
      startVal [time (s)] = 0.0
      text = Not anxious
      units = height
      wrapWidth = 2000
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    TextComponent arousal_cs_text_very_anxious
      color = black
      letterHeight = 0.03
      pos = [0.5,-0.42]
      startVal [time (s)] = 0.0
      text = Very anxious
      units = height
      wrapWidth = 2000
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    CodeComponent arousal_cs_ttl
      Code Type = Py
      Begin Routine:
        if physio == '1':
            USBTTL.write(C1.encode())
      End Routine:
        if physio == '1':
            USBTTL.write(Zero.encode())
            USBTTL.write(Reset.encode())
  Routine start
    CodeComponent start_code
      Code Type = Py
      Before Experiment:
        trial_number = 0
      Begin Experiment:
        # Add clock
        timer = core.Clock()
        time = timer.getTime()
        thisExp.addData('start_time_seconds', time)
      Begin Routine:
        trial_number += 1
        phase = 'start'
    TextComponent start_text_1
      color = black
      letterHeight = 0.05
      pos = [0,0.35]
      startVal [time (s)] = 0.0
      text = Welcome to the shapes task.
      units = height
      wrapWidth = 2000
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    TextComponent start_text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.9
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      text:
        Before we get started, a few reminders:

        - Did you start the physiology recording?
        (If NOT, please press start NOW.)

        - Make sure you are wearing headphones.

        - Keep your eyes on the screen
        for the duration of the task.
    TextComponent start_text_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.33)
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 2000
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      text:
        [Press enter/return to begin]

        (The physiology recording will begin
        once you advance this screen.)
    KeyboardComponent start_key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine start
  Routine intro
  LoopInitiator rating_cs_preacquisition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator valence_cs_preacquisition loopType="TrialHandler"
      conditionsFile = conditions_cs.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cs', 'cs_plus')]),
        OrderedDict([('cs', 'cs_minus')])]
      Routine fixation
      Routine valence_cs
    LoopTerminator valence_cs_preacquisition
    LoopInitiator arousal_cs_preacquisition loopType="TrialHandler"
      conditionsFile = conditions_cs.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cs', 'cs_plus')]),
        OrderedDict([('cs', 'cs_minus')])]
      Routine fixation
      Routine arousal_cs
    LoopTerminator arousal_cs_preacquisition
  LoopTerminator rating_cs_preacquisition
  Routine fixation
  Routine intro_2
  LoopInitiator acquisition loopType="TrialHandler"
    loopType = random
    nReps = 24
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    Routine iti
    Routine cs
    Routine us
  LoopTerminator acquisition
  Routine iti
  LoopInitiator rating_cs_postacquisition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator valence_cs_postacquisition loopType="TrialHandler"
      conditionsFile = conditions_cs.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cs', 'cs_plus')]),
        OrderedDict([('cs', 'cs_minus')])]
      Routine fixation
      Routine valence_cs
    LoopTerminator valence_cs_postacquisition
    LoopInitiator arousal_cs_postacquisition loopType="TrialHandler"
      conditionsFile = conditions_cs.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cs', 'cs_plus')]),
        OrderedDict([('cs', 'cs_minus')])]
      Routine fixation
      Routine arousal_cs
    LoopTerminator arousal_cs_postacquisition
  LoopTerminator rating_cs_postacquisition
  LoopInitiator rating_cs_contingency loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine fixation
    Routine contingency
  LoopTerminator rating_cs_contingency
  LoopInitiator recall loopType="TrialHandler"
    conditionsFile = conditions_cs.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cs', 'cs_plus')]),
      OrderedDict([('cs', 'cs_minus')])]
    Routine iti
    Routine cs
    Routine us
  LoopTerminator recall
  Routine fixation
  LoopInitiator extinction loopType="TrialHandler"
    conditionsFile = conditions_cs_extinction.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('cs', 'cs_plus_no_sound')]),
      OrderedDict([('cs', 'cs_minus')])]
    Routine iti
    Routine cs
    Routine us
  LoopTerminator extinction
  Routine iti
  LoopInitiator rating_cs_postextinction loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    LoopInitiator valence_cs_postextinction loopType="TrialHandler"
      conditionsFile = conditions_cs.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cs', 'cs_plus')]),
        OrderedDict([('cs', 'cs_minus')])]
      Routine fixation
      Routine valence_cs
    LoopTerminator valence_cs_postextinction
    LoopInitiator arousal_cs_postextinction loopType="TrialHandler"
      conditionsFile = conditions_cs.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('cs', 'cs_plus')]),
        OrderedDict([('cs', 'cs_minus')])]
      Routine fixation
      Routine arousal_cs
    LoopTerminator arousal_cs_postextinction
  LoopTerminator rating_cs_postextinction
  Routine fixation
  Routine end
